CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20140723174500
GitHash:6c2d896
ModuleCount:27
HasImagePlaneDetails:True

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression:val screen-(?P<CellLine>[MDA]{3}-[0-9]{3})(?P<Plate>[0-9]{1})_(?P<Well>[A-P][0-9]{2})_s(?P<Site>[0-9])_w(?P<ChannelNumber>[0-9]).TIF
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:5
    Single images count:0
    Select the rule criteria:and (metadata does ChannelNumber "1")
    Name to assign these images:ch1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "2")
    Name to assign these images:ch2
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "3")
    Name to assign these images:ch3
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "4")
    Name to assign these images:ch4
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "5")
    Name to assign these images:ch5
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:Well

IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:ch1
    Name the primary objects to be identified:nuclei
    Typical diameter of objects, in pixel units (Min,Max):15,150
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:22
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
IdentifySecondaryObjects:[module_num:6|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
    Select the input objects:nuclei
    Name the objects to be identified:cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:ch5
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    Regularization factor:0.05
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    Retain outlines of the identified secondary objects?:No
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:MCT
    Select the smoothing method for thresholding:Manual
    Threshold smoothing scale:1
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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
IdentifyTertiaryObjects:[module_num:7|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
    Select the larger identified objects:cells
    Select the smaller identified objects:nuclei
    Name the tertiary objects to be identified:cytoplasm
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    Retain outlines of the tertiary objects?:No
    Shrink smaller object prior to subtraction?:Yes

IdentifySecondaryObjects:[module_num:8|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
    Select the input objects:nuclei
    Name the objects to be identified:cells_inner
    Select the method to identify the secondary objects:Propagation
    Select the input image:ch2
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    Regularization factor:0.05
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    Retain outlines of the identified secondary objects?:No
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:MCT
    Select the smoothing method for thresholding:Manual
    Threshold smoothing scale:5
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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
IdentifyTertiaryObjects:[module_num:9|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
    Select the larger identified objects:cells
    Select the smaller identified objects:cells_inner
    Name the tertiary objects to be identified:protrusions
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    Retain outlines of the tertiary objects?:No
    Shrink smaller object prior to subtraction?:Yes

EnhanceOrSuppressFeatures:[module_num:10|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
    Select the input image:ch3
    Name the output image:speckles_enhanced_ch2
    Select the operation:Enhance
    Feature size:3
    Feature type:Speckles
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
EnhanceOrSuppressFeatures:[module_num:11|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
    Select the input image:ch4
    Name the output image:speckles_enhanced_ch4
    Select the operation:Enhance
    Feature size:3
    Feature type:Speckles
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
IdentifyPrimaryObjects:[module_num:12|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
    Select the input image:speckles_enhanced_ch4
    Name the primary objects to be identified:speckles_ch4
    Typical diameter of objects, in pixel units (Min,Max):1,5
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Automatic
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
IdentifyPrimaryObjects:[module_num:13|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
    Select the input image:speckles_enhanced_ch2
    Name the primary objects to be identified:speckles_ch2
    Typical diameter of objects, in pixel units (Min,Max):2,10
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Automatic
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
EnhanceOrSuppressFeatures:[module_num:14|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
    Select the input image:ch5
    Name the output image:nucleoli_enhanced
    Select the operation:Enhance
    Feature size:20
    Feature type:Speckles
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
IdentifyPrimaryObjects:[module_num:15|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
    Select the input image:nucleoli_enhanced
    Name the primary objects to be identified:nucleoli
    Typical diameter of objects, in pixel units (Min,Max):10,20
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Automatic
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
ExpandOrShrinkObjects:[module_num:16|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
    Select the input objects:nuclei
    Name the output objects:nuclei_shrunuken
    Select the operation:Shrink objects by a specified number of pixels
    Number of pixels by which to expand or shrink:5
    Fill holes in objects so that all objects shrink to a single point?:No
    Retain the outlines of the identified objects?:No
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
MeasureObjectNeighbors:[module_num:17|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
    Select objects to measure:cells
    Select neighboring objects to measure:cells
    Method to determine neighbors:Within a specified distance
    Neighbor distance:2
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:18|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
    Select objects to measure:nuclei
    Select neighboring objects to measure:nuclei
    Method to determine neighbors:Within a specified distance
    Neighbor distance:2
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectSizeShape:[module_num:19|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
    Select objects to measure:cells
    Select objects to measure:nuclei
    Select objects to measure:protrusions
    Select objects to measure:nucleoli
    Calculate the Zernike features?:Yes

MeasureGranularity:[module_num:20|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
    Image count:1
    Object count:0
    Select an image to measure:ch4
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16

MeasureObjectRadialDistribution:[module_num:21|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
    Hidden:1
    Hidden:1
    Hidden:1
    Select an image to measure:ch2
    Select objects to measure:cells
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:4
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
MeasureImageQuality:[module_num:22|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
    Calculate metrics for which images?:All loaded images
    Image count:1
    Scale count:1
    Threshold count:1
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    Include the image rescaling value?:Yes
    Calculate blur metrics?:Yes
    Spatial scale for blur measurements:20
    Calculate saturation metrics?:Yes
    Calculate intensity metrics?:Yes
    Calculate thresholds?:Yes
    Use all thresholding methods?:No
    Select a thresholding method:Otsu
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
MeasureImageIntensity:[module_num:23|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
    Select the image to measure:ch2
    Measure the intensity only from areas enclosed by objects?:Yes
    Select the input objects:nuclei
    Select the image to measure:ch2
    Measure the intensity only from areas enclosed by objects?:Yes
    Select the input objects:cells
    Select the image to measure:ch3
    Measure the intensity only from areas enclosed by objects?:Yes
    Select the input objects:cells
    Select the image to measure:ch4
    Measure the intensity only from areas enclosed by objects?:Yes
    Select the input objects:cells
    Select the image to measure:ch5
    Measure the intensity only from areas enclosed by objects?:Yes
    Select the input objects:cells
    Select the image to measure:ch4
    Measure the intensity only from areas enclosed by objects?:Yes
    Select the input objects:speckles_ch4
    Select the image to measure:ch2
    Measure the intensity only from areas enclosed by objects?:Yes
    Select the input objects:speckles_ch2

RelateObjects:[module_num:24|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
    Select the input child objects:speckles_ch2
    Select the input parent objects:cells
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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
RelateObjects:[module_num:25|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
    Select the input child objects:speckles_ch4
    Select the input parent objects:cells
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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
RelateObjects:[module_num:26|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
    Select the input child objects:nucleoli
    Select the input parent objects:nuclei
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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
ExportToSpreadsheet:[module_num:27|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|F:\\\\\\\\2015-07-30_val-screen\\\\\\\\cellprofiler\\\\\\\\output
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix::MDA-231_
    Overwrite without warning?:No
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